WorkflowBuilder(Version=2.6.0)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device => #1
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=256)
  Hub(Address=1, HardwareID=2, FirmwareVersion=256, ClockHz=80000000, DelayNanoSeconds=0)
  FrameClockHz=250000000
  Enable=false
  Configuration
    Mode=RECORD
    Channels
      NeuropixelsChannel(Bank=ZERO, APGain=x1000, LFPGain=x50, Standby=false, APFilter=false, Reference=EXTERNAL, Shank=0)
      NeuropixelsChannel(Bank=ZERO, APGain=x1000, LFPGain=x50, Standby=false, APFilter=false, Reference=EXTERNAL, Shank=0)
      NeuropixelsChannel(Bank=ZERO, APGain=x1000, LFPGain=x50, Standby=false, APFilter=false, Reference=EXTERNAL, Shank=0)
      NeuropixelsChannel(Bank=ZERO, APGain=x1000, LFPGain=x50, Standby=false, APFilter=false, Reference=EXTERNAL, Shank=0)
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    ADCs
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
    Electrodes
      NeuropixelsElectrode
        APx50Correction=1
        APx125Correction=1
        APx250Correction=1
        APx500Correction=1
        APx1000Correction=1
        APx1500Correction=1
        APx2000Correction=1
        APx3000Correction=1
        LFPx50Correction=1
        LFPx125Correction=1
        LFPx250Correction=1
        LFPx500Correction=1
        LFPx1000Correction=1
        LFPx1500Correction=1
        LFPx2000Correction=1
        LFPx3000Correction=1
      NeuropixelsElectrode
        APx50Correction=1
        APx125Correction=1
        APx250Correction=1
        APx500Correction=1
        APx1000Correction=1
        APx1500Correction=1
        APx2000Correction=1
        APx3000Correction=1
        LFPx50Correction=1
        LFPx125Correction=1
        LFPx250Correction=1
        LFPx500Correction=1
        LFPx1000Correction=1
        LFPx1500Correction=1
        LFPx2000Correction=1
        LFPx3000Correction=1
      NeuropixelsElectrode
        APx50Correction=1
        APx125Correction=1
        APx250Correction=1
        APx500Correction=1
        APx1000Correction=1
        APx1500Correction=1
        APx2000Correction=1
        APx3000Correction=1
        LFPx50Correction=1
        LFPx125Correction=1
        LFPx250Correction=1
        LFPx500Correction=1
        LFPx1000Correction=1
        LFPx1500Correction=1
        LFPx2000Correction=1
        LFPx3000Correction=1
      NeuropixelsElectrode
        APx50Correction=1
        APx125Correction=1
        APx250Correction=1
        APx500Correction=1
        APx1000Correction=1
        APx1500Correction=1
        APx2000Correction=1
        APx3000Correction=1
        LFPx50Correction=1
        LFPx125Correction=1
        LFPx250Correction=1
        LFPx500Correction=1
        LFPx1000Correction=1
        LFPx1500Correction=1
        LFPx2000Correction=1
        LFPx3000Correction=1
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    InternalReferenceChannels(int=191)
  PerformReadCheck=false
  BlockSize=100
-> MemberSelector(Selector=SpikeData)
#1 -> MemberSelector(Selector=SpikeFrameClock)
#1 -> MemberSelector(Selector=SpikeDataClock)
#1 -> MemberSelector(Selector=LFPData)
-> GroupWorkflow "Probe Traces"
    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      Title=ProbeImage
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=24
      TargetUpdateFrequency=nil
      RenderState(StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha))
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=ProbeImage, QuadEffects=None), MeshConfiguration(Name=Waveform)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage0
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage1
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage2
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage3
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage4
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage5
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage6
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage7
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage8
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage9
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage10
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage11
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage12
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage13
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage14
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage15
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage16
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage17
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage18
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage19
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage20
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage21
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage22
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ProbeImage23
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Waveform
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=waveform.vert
          GeometryShader=waveform.geom
          FragmentShader=waveform.frag
          MeshName=""
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Overview
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=overview.vert
          FragmentShader=quad.frag
          MeshName=ProbeImage
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Highlight
          RenderState(StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend))
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=highlight.vert
          FragmentShader=highlight.frag
          MeshName=""
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage0, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage1, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage2, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage3, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage4, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage5, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage6, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage7, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage8, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage9, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage10, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage11, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage12, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage13, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage14, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage15, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage16, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage17, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage18, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage19, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage20, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage21, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage22, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=ProbeImage23, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Overview, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Highlight, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Resources.LoadResources

    WorkflowInput Source1
    -> Condition
        Bonsai.Shaders.Input.KeyDown(Key=Space, Modifiers=nil)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Mod(Operand=IntProperty(Value=2))
        -> Equal(Operand=IntProperty(Value=0)) => #4
        BooleanProperty(Value=true) => #5
        #5, #4 -> Merge
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=0, Max=1024, RangeMin=-1, RangeMax=1, RescaleType=Linear)
    -> Bonsai.Dsp.Reshape(Channels=0, Rows=0)
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0) => #9
    -> Bonsai.JonsUtils.CircularBuffer(Count=2000) => #10
    -> Sink UpdateSizeUniform(Description="Updates information about the number of channels and samples in the waveform visualizer.") => #11
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Rows) => #1
        ExternalizedMapping(ShaderName) => #2
        #1, #2 -> Bonsai.Shaders.UpdateUniform(UniformName=rows, ShaderName=Waveform)
        #0 -> MemberSelector(Selector=Cols) => #4
        #4, #2 -> Bonsai.Shaders.UpdateUniform(UniformName=cols, ShaderName=Waveform)
    -> MemberSelector(Selector="Rows,Cols")
    -> Multiply => #13
    #11, #13 -> Zip
    -> InputMapping(Selector=Item1, Rows(Selector=Item2))
    -> Bonsai.Dsp.Reshape(Channels=0, Rows=768000) => #16
    -> MemberSelector(Selector=Size)
    #16 -> Bonsai.Shaders.UpdateVertexBuffer(MeshName=Waveform, DrawMode=LineStrip, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=1, Normalized=false, Type=Float)))
    #10 -> MemberSelector(Selector=Rows) => #19
    -> PropertyMapping(Value)
    -> FloatProperty(Value=384) => #21
    #19 -> PropertyMapping(Max) => #22
    #19 -> Negate
    -> PropertyMapping(Min) => #24
    #19 -> PropertyMapping(Value) => #25
    Bonsai.Shaders.Input.MouseWheel
    -> MemberSelector(Selector=EventArgs.DeltaPrecise) => #27
    -> Condition "Key Down"
        WorkflowInput Source1 => #0
        ExternalizedMapping(Key) => #1
        -> Bonsai.Shaders.Input.KeyDown(Key=ControlLeft, Modifiers=nil)
        -> BooleanProperty(Value=true) => #3
        #1 -> Bonsai.Shaders.Input.KeyUp(Key=ControlLeft, Modifiers=nil)
        -> BooleanProperty(Value=false) => #5
        #3, #5 -> Merge => #6
        #0, #6 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Bonsai.JonsUtils:Workflows.BoundedAccumulate.bonsai, Reset_x0020_Value=0, Initial_x0020_Value=0, Min=0, Max=1000, Gain=5)
    -> Bonsai.Shaders.UpdateUniform(UniformName=amplitudezoom, ShaderName=Waveform)
    #27 -> Condition "Key Down"
        WorkflowInput Source1 => #0
        ExternalizedMapping(Key) => #1
        -> Bonsai.Shaders.Input.KeyDown(Key=ShiftLeft, Modifiers=nil)
        -> BooleanProperty(Value=true) => #3
        #1 -> Bonsai.Shaders.Input.KeyUp(Key=ShiftLeft, Modifiers=nil)
        -> BooleanProperty(Value=false) => #5
        #3, #5 -> Merge => #6
        #0, #6 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Bonsai.JonsUtils:Workflows.BoundedAccumulate.bonsai, Reset_x0020_Value=0, Initial_x0020_Value=0, Min=1, Max=100, Gain=1) => #32
    -> Bonsai.Shaders.UpdateUniform(UniformName=ywindowzoom, ShaderName=Waveform)
    #32 -> Bonsai.Shaders.UpdateUniform(UniformName=ywindowzoom, ShaderName=Highlight)
    #27 -> Condition "No Keys Pressed" => #35
        WorkflowInput Source1 => #0
        Bonsai.Shaders.Input.KeyDown(Key=nil, Modifiers=nil)
        -> BooleanProperty(Value=false) => #2
        Bonsai.Shaders.Input.KeyUp(Key=nil, Modifiers=nil)
        -> BooleanProperty(Value=true) => #4
        BooleanProperty(Value=true) => #5
        #2, #4, #5 -> Merge => #6
        #0, #6 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    Bonsai.Shaders.Input.MouseDown(Button=nil)
    -> Bonsai.Shaders.Input.NormalizedDeviceCoordinates
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=X)
        -> LessThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Y) => #39
    #39, #25 -> Multiply(Operand=FloatProperty(Value=384))
    -> PropertyMapping("Reset Value") => #41
    #35, #22, #24, #41 -> IncludeWorkflow(Path=Bonsai.JonsUtils:Workflows.BoundedAccumulate.bonsai, Reset_x0020_Value=-184.637146, Initial_x0020_Value=0, Min=-384, Max=384, Gain=3)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=-184.637146) => #44
    #44, #21 -> CombineLatest
    -> Divide
    -> Bonsai.Shaders.UpdateUniform(UniformName=yshift, ShaderName=Waveform)
    -> Bonsai.Shaders.UpdateUniform(UniformName=yshift, ShaderName=Highlight)
    #10 -> Bonsai.Shaders.UpdateTexture(TextureName=Overview, TextureTarget=Texture2D, InternalFormat=R32f)
    #9 -> Disable GroupWorkflow "Probe Image"(Description="Creates the right pane showing the overall probe activity\n")
        SubscribeSubject "Ephys Data"
        -> ElementIndex => #1
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage0, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage1, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage2, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage3, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=4))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage4, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=5))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage5, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=6))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage6, TextureTarget=Texture2D, InternalFormat=R32f)
        #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=7))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage7, TextureTarget=Texture2D, InternalFormat=R32f)

        SubscribeSubject "Ephys Data"
        -> ElementIndex => #27
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=8))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage8, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=9))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage9, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage10, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=11))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage11, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=12))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage12, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=13))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage13, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=14))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage14, TextureTarget=Texture2D, InternalFormat=R32f)
        #27 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=15))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage15, TextureTarget=Texture2D, InternalFormat=R32f)

        SubscribeSubject "Ephys Data"
        -> ElementIndex => #53
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=16))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage16, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=17))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage17, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=18))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage18, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=19))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage19, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage20, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=21))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage21, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=22))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage22, TextureTarget=Texture2D, InternalFormat=R32f)
        #53 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value(DisplayName=Index)) => #2
            ExternalizedMapping(Value) => #3
            #1, #3 -> Mod(Operand=IntProperty(Value=24)) => #4
            #4, #2 -> Equal(Operand=IntProperty(Value=23))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Shaders.UpdateTexture(TextureName=ProbeImage23, TextureTarget=Texture2D, InternalFormat=R32f)

        Bonsai.Shaders.UpdateFrame => #78
        -> IntProperty(Value=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage0)
        #78 -> IntProperty(Value=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage1)
        #78 -> IntProperty(Value=2)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage2)
        #78 -> IntProperty(Value=3)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage3)
        #78 -> IntProperty(Value=4)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage4)
        #78 -> IntProperty(Value=5)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage5)
        #78 -> IntProperty(Value=6)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage6)
        #78 -> IntProperty(Value=7)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage7)

        Bonsai.Shaders.UpdateFrame => #95
        -> IntProperty(Value=8)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage8)
        #95 -> IntProperty(Value=9)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage9)
        #95 -> IntProperty(Value=10)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage10)
        #95 -> IntProperty(Value=11)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage11)
        #95 -> IntProperty(Value=12)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage12)
        #95 -> IntProperty(Value=13)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage13)
        #95 -> IntProperty(Value=14)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage14)
        #95 -> IntProperty(Value=15)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage15)

        Bonsai.Shaders.UpdateFrame => #112
        -> IntProperty(Value=16)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage16)
        #112 -> IntProperty(Value=17)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage17)
        #112 -> IntProperty(Value=18)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage18)
        #112 -> IntProperty(Value=19)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage19)
        #112 -> IntProperty(Value=20)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage20)
        #112 -> IntProperty(Value=21)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage21)
        #112 -> IntProperty(Value=22)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage22)
        #112 -> IntProperty(Value=23)
        -> Bonsai.Shaders.UpdateUniform(UniformName=channel, ShaderName=ProbeImage23)

        WorkflowInput Source1
        -> PublishSubject "Ephys Data"

    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.DrawMesh(ShaderName=Highlight, MeshName=ProbeImage)
    -> Bonsai.Shaders.DrawMesh(ShaderName=Waveform, MeshName=Waveform)
#1 -> MemberSelector(Selector=LFPFrameClock)
#1 -> MemberSelector(Selector=LFPDataClock)
#1 -> MemberSelector(Selector=FrameCounter)

Bonsai.ONIX.BNO055Device => #10
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=258)
  Hub(Address=1, HardwareID=2, FirmwareVersion=256, ClockHz=80000000, DelayNanoSeconds=0)
  FrameClockHz=250000000
  Enable=false
-> MemberSelector(Selector=Quaternion)
#10 -> MemberSelector(Selector=FrameClock)
#10 -> MemberSelector(Selector=DataClock)

Bonsai.ONIX.TS4231V1Device
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=259)
  Hub(Address=1, HardwareID=2, FirmwareVersion=256, ClockHz=80000000, DelayNanoSeconds=0)
  FrameClockHz=250000000
  Enable=false
-> Bonsai.ONIX.TS4321V1FrameToPosition(Index=0, P(X=0, Y=0, Z=0), Q(X=1, Y=0, Z=0), SweepFrequency=60)
-> MemberSelector(Selector=Point)
